CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<Row>[0-9]{2})c(?P<Column>[0-9]{2})f(?P<FOV>[0-9]{2})p(?P<Slice>[0-9]{2})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<Row>[0-9]{2})c(?P<Column>[0-9]{2})f(?P<FOV>[0-9]{2})p(?P<Slice>[0-9]{2})_ch(?P<Channel>[0-9]{1})_corr
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "corr")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:7
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_ch1_corr")
    Name to assign these images:ESTER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_ch2_corr")
    Name to assign these images:MCHERRY
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_ch3_corr")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_ch4_corr")
    Name to assign these images:Golgin97
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "RGB_cp_masks_cellbody")
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    Name to assign these objects:Cellbody_segmentation
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "RGB_cp_masks_nuclei")
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    Name to assign these objects:Nucleus_segmentation
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "OBJ_PRED")
    Name to assign these images:Object_prediction
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
FilterObjects:[module_num:5|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
    Select the objects to filter:Cellbody_segmentation
    Name the output objects:Cellbodies_NOT_ON_BORDER
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a seperate set?:No
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
RelateObjects:[module_num:6|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notes:['Module that relates nuclei (child) to segmentations (parent) - used to associate the nuclei feature to the cellbody segmentation from CellPose']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
    Parent objects:Cellbodies_NOT_ON_BORDER
    Child objects:Nucleus_segmentation
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:7|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
    Parent objects:Cellbody_segmentation
    Child objects:Nucleus_segmentation
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
IdentifyTertiaryObjects:[module_num:8|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notes:['This module can generate objects (note, childeren objects naturally retain a column describing the associate parent object - in the case of a child object with multiple parent objects (e.g. a cytoplasm with two nuclei), only one seems to be listed).']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
    Select the larger identified objects:Cellbodies_NOT_ON_BORDER
    Select the smaller identified objects:Nucleus_segmentation
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MaskImage:[module_num:9|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notes:['This module generates a mask on the ESTER image that is the inverted mask of the segmentation (so it will be the entire background).']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
    Select the input image:ESTER
    Name the output image:ESTER_BACKGROUND
    Use objects or an image as a mask?:Objects
    Select object for mask:Cellbody_segmentation
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    Invert the mask?:Yes

MaskImage:[module_num:10|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notes:['This module generates a mask on the MCHERRY image that is the inverted mask of the segmentation (so it will be the entire background).']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
    Select the input image:Golgin97
    Name the output image:GOLGIN97_BACKGROUND
    Use objects or an image as a mask?:Objects
    Select object for mask:Cellbody_segmentation
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    Invert the mask?:Yes

MaskImage:[module_num:11|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notes:['This module generates a mask on the GOLGIN97 image that is the inverted mask of the segmentation (so it will be the entire background).']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
    Select the input image:MCHERRY
    Name the output image:MCHERRY_BACKGROUND
    Use objects or an image as a mask?:Objects
    Select object for mask:Cellbody_segmentation
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    Invert the mask?:Yes

MeasureImageAreaOccupied:[module_num:12|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notes:['This module measures the area of the specified object as well as the total area of the image.', 'Note, it also measures the total perimeter of all objects.', '', "It doesn't give you a percentage, although that can be calculated readily from the values.", '', "Note, this module isn't necesarry to obtain total area and background as areas are part of the MeasureImageIntensity module"]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
    Measure the area occupied by:Objects
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    Select object sets to measure:Cellbody_segmentation

MeasureImageIntensity:[module_num:13|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notes:['This module measures the intensity values of the specified images.', 'More specifically:', 'Measures the intensity values of the background in the ester, golgin, and mcherry images.']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
    Select images to measure:ESTER_BACKGROUND, GOLGIN97_BACKGROUND, MCHERRY_BACKGROUND
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:14|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notes:['This moduel measures the intensity values of the specified images.', '', 'When the use area from OBJECT is ticked, it applies that mask. In this case, it is used to get the average value of all cells in in the given FOV.']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
    Select images to measure:ESTER, Golgin97, MCHERRY
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cellbodies_NOT_ON_BORDER
    Calculate custom percentiles:Yes
    Specify percentiles to measure:90

ImageMath:[module_num:15|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notes:['This modules subtracts the median intensity of mCherry BACKGROUND from the entire mCherry image (done on each FOV)']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MCHERRY_BACKCORR
    Image or measurement?:Image
    Select the first image:MCHERRY
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:MCHERRY_BACKGROUND
    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_MCHERRY_BACKGROUND

ImageMath:[module_num:16|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notes:['This modules subtracts the median intensity of CHGA BACKGROUND from the entire CHGA image (done on each FOV)']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:GOLGIN97_BACKCORR
    Image or measurement?:Image
    Select the first image:Golgin97
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:GOLGIN97_BACKGROUND
    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_GOLGIN97_BACKGROUND

ImageMath:[module_num:17|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notes:['This modules subtracts the median intensity of ESTER BACKGROUND from the entire ESTER image (done on each FOV)']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ESTER_BACKCORR
    Image or measurement?:Image
    Select the first image:ESTER
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:GOLGIN97_BACKGROUND
    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_ESTER_BACKGROUND

MeasureObjectSizeShape:[module_num:18|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notes:['This module measures area/shape/size features of the specified objects.', '', 'Note, ObjectSizeShape, especially with Zernike features can take a long time to calculate.', 'The reason for including here is because we need the BoundingBox Max and Min values in order to filter out objects that are touching the edge of the image.', 'The reason for having a variable that can be used for filtering objects touching the edge after running the cellprofiler module instead of filtering during cellprofiler is because we need objects touching borders to be included when neighbours are measured. (and these objects cannot be included unless they are generated through something like generate IdentifySecondaryObject.', '']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
    Select object sets to measure:Cellbodies_NOT_ON_BORDER, Cellbody_segmentation, Cytoplasm, Nucleus_segmentation
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureGranularity:[module_num:19|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notes:['This module measures the granularity of the signal of the selected image.', 'Here, the MCHERRY_BACKGROUND image is the interesting one (unless an additional correction is introduced).', '', 'Note, the subsampling factor may need to be modified.', 'From the SNX2 ']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
    Select images to measure:MCHERRY_BACKCORR
    Measure within objects?:Yes
    Select objects to measure:Cellbodies_NOT_ON_BORDER, Cytoplasm
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.25
    Radius of structuring element:2
    Range of the granular spectrum:16

MeasureColocalization:[module_num:20|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notes:['Co-localisation between: BACKGROUND CORRECTED MCHERRY and BACKGROUND CORRECTED GOLGIN97']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
    Select images to measure:GOLGIN97_BACKCORR, MCHERRY_BACKCORR
    Set threshold as percentage of maximum intensity for the images:0
    Select where to measure correlation:Within objects
    Select objects to measure:Cellbodies_NOT_ON_BORDER, Cytoplasm
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureObjectIntensity:[module_num:21|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
    Select images to measure:ESTER_BACKCORR, GOLGIN97_BACKCORR, MCHERRY_BACKCORR, Object_prediction
    Select objects to measure:Cellbodies_NOT_ON_BORDER, Cellbody_segmentation, Cytoplasm, Nucleus_segmentation

MeasureTexture:[module_num:22|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
    Select images to measure:MCHERRY_BACKCORR
    Select objects to measure:Cellbodies_NOT_ON_BORDER, Cytoplasm
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:2

MeasureObjectIntensityDistribution:[module_num:23|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
    Select images to measure:MCHERRY_BACKCORR
    Hidden:2
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cellbodies_NOT_ON_BORDER
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nucleus_segmentation
    Select objects to measure:Cytoplasm
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nucleus_segmentation
    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:24|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notes:['', 'Note, ObjectSizeShape, especially with Zernike features can take a long time to calculate.', 'The reason for including here is because we need the BoundingBox Max and Min values in order to filter out objects that are touching the edge of the image.', 'The reason for having a variable that can be used for filtering objects touching the edge after running the cellprofiler module instead of filtering during cellprofiler is because we need objects touching borders to be included when neighbours are measured. (and these objects cannot be included unless they are generated through something like generate IdentifySecondaryObject.', '']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
    Select object sets to measure:Cellbodies_NOT_ON_BORDER, Cellbody_segmentation, Cytoplasm, Nucleus_segmentation
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:25|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
    Select images to measure:ESTER, ESTER_BACKCORR, GOLGIN97_BACKCORR, Golgin97, MCHERRY, MCHERRY_BACKCORR, Object_prediction
    Select objects to measure:Cellbodies_NOT_ON_BORDER, Cellbody_segmentation, Cytoplasm, Nucleus_segmentation

ClassifyObjects:[module_num:26|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notes:['This classify object module is used to take the Object_predictions generated via Ilastik (loaded as greyscale) and classify the segmentations (cellbodies) according to whether they have a median intensity that falles within the 0, 0.004, 0.008, or 0.012 bins (note, the numbers create bins that capture the values of 1/255, 2/255, and 3/255.', '(The predictions have values between 1 and 3 (0 is background), with 1 being PROPER cell, 2 being folding artifact, and 3 being dying/dividing cells. CellProfiler scales the image corresponding to the max possible pixel value (255) which is why the bins capture the 1/255, 2/255, and 3/255 fractions.)', '', 'Note, in the datasheet generated by this module, each bin creates a new variable (boolean).']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
    Make classification decision based on:Single measurement
    Hidden:2
    Hidden:1
    Select the object to be classified:Cellbody_segmentation
    Select the measurement to classify by:Intensity_MedianIntensity_Object_prediction
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,0.004,0.008
    Give each bin a name?:Yes
    Enter the bin names separated by commas:PROPER_CELL,DYING_DIVIDING_CELL
    Retain an image of the classified objects?:No
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    Select the object to be classified:Cellbodies_NOT_ON_BORDER
    Select the measurement to classify by:Intensity_MedianIntensity_Object_prediction
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,0.004,0.008
    Give each bin a name?:Yes
    Enter the bin names separated by commas:PROPER_CELL,DYING_DIVIDING_CELL
    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Elsewhere...|
    Rules or classifier file name:mymodel.model

MeasureObjectNeighbors:[module_num:27|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
    Select objects to measure:Cellbody_segmentation
    Select neighboring objects to measure:Cellbody_segmentation
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:28|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notes:["This module is to potentially measure nuclei next to one another as an additional way of filtering out multinuclei cells if they haven't been segmented from one another.", 'It will likely require that the nucleus measurement is paired with the cellbody/cytosol measurment afterwards.', '', '(I think I will have to pair cellbody with cytoplasm anyways)', '', 'Note, the neighbor distance expands each object with specified no. of pixels. From briefly looking/comparing distances, nuclei within 10-15 pixels are more likely to belong to same cell, whereas when we get to about 20 pixel distance, they may be from separate cells.']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
    Select objects to measure:Nucleus_segmentation
    Select neighboring objects to measure:Nucleus_segmentation
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:29|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|weatheritt/pethan/SNX2_mutants_rawdata_2024/Rep1/CellProfiler_results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:My_MEASUREMENTS_FULL_
    Overwrite existing files without warning?:No
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